<?xml version='1.0'?>
<model cmeta:id="NFATMyocyte_TomidaProtocol" name="NFATMyocyte_TomidaProtocol" xmlns="http://www.cellml.org/cellml/1.1#" xmlns:cellml="http://www.cellml.org/cellml/1.1#" xmlns:cmeta="http://www.cellml.org/metadata/1.0#" xmlns:xlink="http://www.w3.org/1999/xlink">
    <import xlink:href="calcium_TomidaProtocol.cellml">
        <component component_ref="calcium" name="calcium"/>
    </import>
    <import xlink:href="calcineurin_TomidaProtocol.cellml">
        <component component_ref="calcineurin" name="calcineurin"/>
    </import>
    <import xlink:href="NFATCycling_TomidaProtocol.cellml">
        <component component_ref="NFAT_Cycling" name="NFAT_Cycling"/>
    </import>
    <!--
        *******************************************************
        ***         U   N   I   T   S                       ***
        *******************************************************
        -->
    <units name="s">
        <unit units="second"/>
    </units>
    <units name="nM">
        <unit prefix="nano" units="mole"/>
        <unit exponent="-1" units="liter"/>
    </units>
    <!--
     *********************************************************
     ***       C   O   M   P   O   N   E   N   T   S       ***
     *********************************************************
     -->
    <component name="environment">
        <variable name="t" private_interface="out" units="s"/>
    </component>
    <component name="geometry">
        <variable initial_value="50" name="Ccn" private_interface="out" units="dimensionless"/>
        <variable name="t" private_interface="out" public_interface="in" units="s"/>
        <variable name="Ca" private_interface="in" units="nM"/>
        <variable name="NFATN_c" private_interface="in" units="nM"/>
        <variable name="NFATp_c" private_interface="in" units="nM"/>
        <variable name="NFATN_n" private_interface="in" units="nM"/>
        <variable name="NFATp_n" private_interface="in" units="nM"/>
        <variable name="NFATN_c_percentage" units="nM"/>
        <math xmlns="http://www.w3.org/1998/Math/MathML">
            <apply>
                <eq/>
                <ci>NFATN_c_percentage</ci>
                <apply>
                    <times/>
                    <cn cellml:units="dimensionless">100</cn>
                    <ci>NFATN_c</ci>
                </apply>
            </apply>
        </math>
    </component>
    <component name="NFAT_Cycling_interface">
        <variable name="nuclearNFAT" units="nM"/>
        <variable name="NFATN_n" public_interface="in" units="nM"/>
        <variable name="NFATp_n" public_interface="in" units="nM"/>
        <math xmlns="http://www.w3.org/1998/Math/MathML">
            <apply>
                <eq/>
                <ci>nuclearNFAT</ci>
                <apply>
                    <times/>
                    <cn cellml:units="dimensionless">2</cn>
                    <apply>
                        <plus/>
                        <ci>NFATN_n</ci>
                        <ci>NFATp_n</ci>
                    </apply>
                </apply>
            </apply>
        </math>
    </component>
    <group>
        <relationship_ref relationship="encapsulation"/>
        <component_ref component="environment">
            <component_ref component="geometry">
                <component_ref component="calcium"/>
                <component_ref component="calcineurin"/>
                <component_ref component="NFAT_Cycling"/>
                <component_ref component="NFAT_Cycling_interface"/>
            </component_ref>
        </component_ref>
    </group>
    <connection>
        <map_components component_1="environment" component_2="geometry"/>
        <map_variables variable_1="t" variable_2="t"/>
    </connection>
    <connection>
        <map_components component_1="geometry" component_2="calcium"/>
        <map_variables variable_1="t" variable_2="t"/>
        <map_variables variable_1="Ca" variable_2="Ca"/>
    </connection>
    <connection>
        <map_components component_1="geometry" component_2="calcineurin"/>
        <map_variables variable_1="t" variable_2="t"/>
    </connection>
    <connection>
        <map_components component_1="geometry" component_2="NFAT_Cycling"/>
        <map_variables variable_1="t" variable_2="t"/>
        <map_variables variable_1="Ccn" variable_2="Ccn"/>
        <map_variables variable_1="NFATN_c" variable_2="NFATN_c"/>
        <map_variables variable_1="NFATp_c" variable_2="NFATp_c"/>
        <map_variables variable_1="NFATN_n" variable_2="NFATN_n"/>
        <map_variables variable_1="NFATp_n" variable_2="NFATp_n"/>
    </connection>
    <connection>
        <map_components component_1="calcium" component_2="calcineurin"/>
        <map_variables variable_1="Ca" variable_2="Ca"/>
    </connection>
    <connection>
        <map_components component_1="calcineurin" component_2="NFAT_Cycling"/>
        <map_variables variable_1="act_N" variable_2="act_N"/>
        <map_variables variable_1="Ntot" variable_2="Ntot"/>
    </connection>
    <connection>
        <map_components component_1="NFAT_Cycling_interface" component_2="NFAT_Cycling"/>
        <map_variables variable_1="NFATN_n" variable_2="NFATN_n"/>
        <map_variables variable_1="NFATp_n" variable_2="NFATp_n"/>
    </connection>
    <rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
        <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:about="">
            <creator xmlns="http://purl.org/dc/elements/1.1/">
                <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:nodeID="n1"/>
            </creator>
            <title xmlns="http://purl.org/dc/elements/1.1/" xml:lang="en" xmlns:xml="http://www.w3.org/XML/1998/namespace">Sensitivity of NFAT Cycling to Cytosolic Calcium Concentration: Implications for Hypertrophic Signals in Cardiac Myocytes (Tomida-derived calcium protocol)</title>
        </rdf:Description>
        <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:nodeID="n1">
            <N xmlns="http://www.w3.org/2001/vcard-rdf/3.0#">
                <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:nodeID="n2"/>
            </N>
            <ORG xmlns="http://www.w3.org/2001/vcard-rdf/3.0#">
                <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:nodeID="n3"/>
            </ORG>
            <EMAIL xmlns="http://www.w3.org/2001/vcard-rdf/3.0#">
                <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:nodeID="n4"/>
            </EMAIL>
        </rdf:Description>
        <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:nodeID="n2">
            <Family xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en" xmlns:xml="http://www.w3.org/XML/1998/namespace">Cooling</Family>
            <Given xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en" xmlns:xml="http://www.w3.org/XML/1998/namespace">Michael</Given>
        </rdf:Description>
        <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:nodeID="n3">
            <Orgname xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en" xmlns:xml="http://www.w3.org/XML/1998/namespace">Auckland Bioengineering Institute</Orgname>
            <Orgunit xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en" xmlns:xml="http://www.w3.org/XML/1998/namespace">University of Auckland</Orgunit>
        </rdf:Description>
        <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:nodeID="n4">
            <rdf:type xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
                <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:about="http://imc.org/vCard/3.0#internet"/>
            </rdf:type>
            <rdf:value xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" xml:lang="en" xmlns:xml="http://www.w3.org/XML/1998/namespace">m.cooling@auckland.ac.nz</rdf:value>
        </rdf:Description>
        <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:about="#NFATMyocyte_TomidaProtocol">
            <reference xmlns="http://www.cellml.org/bqs/1.0#">
                <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:nodeID="n5"/>
            </reference>
            <reference xmlns="http://www.cellml.org/bqs/1.0#">
                <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:nodeID="n6"/>
            </reference>
        </rdf:Description>
        <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:nodeID="n5">
            <JournalArticle xmlns="http://www.cellml.org/bqs/1.0#">
                <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:nodeID="n7"/>
            </JournalArticle>
        </rdf:Description>
        <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:nodeID="n6">
            <subject xmlns="http://purl.org/dc/elements/1.1/">
                <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:nodeID="n8"/>
            </subject>
        </rdf:Description>
        <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:nodeID="n7">
            <creator xmlns="http://purl.org/dc/elements/1.1/">
                <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:nodeID="n9"/>
            </creator>
            <title xmlns="http://purl.org/dc/elements/1.1/" xml:lang="en" xmlns:xml="http://www.w3.org/XML/1998/namespace">Sensitivity of NFAT Cycling to Cytosolic Calcium Concentration: Implications for Hypertrophic Signals in Cardiac Myocytes</title>
            <volume xmlns="http://www.cellml.org/bqs/1.0#" xml:lang="en" xmlns:xml="http://www.w3.org/XML/1998/namespace">96</volume>
            <first_page xmlns="http://www.cellml.org/bqs/1.0#" xml:lang="en" xmlns:xml="http://www.w3.org/XML/1998/namespace">2095</first_page>
            <last_page xmlns="http://www.cellml.org/bqs/1.0#" xml:lang="en" xmlns:xml="http://www.w3.org/XML/1998/namespace">2104</last_page>
            <Journal xmlns="http://www.cellml.org/bqs/1.0#">
                <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:nodeID="n10"/>
            </Journal>
            <issued xmlns="http://purl.org/dc/terms/">
                <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:nodeID="n11"/>
            </issued>
        </rdf:Description>
        <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:nodeID="n9">
            <rdf:type xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
                <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:about="http://www.w3.org/1999/02/22-rdf-syntax-ns#Seq"/>
            </rdf:type>
            <rdf:_1 xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
                <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:nodeID="n12"/>
            </rdf:_1>
            <rdf:_2 xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
                <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:nodeID="n13"/>
            </rdf:_2>
            <rdf:_3 xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
                <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:nodeID="n14"/>
            </rdf:_3>
        </rdf:Description>
        <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:nodeID="n10">
            <title xmlns="http://purl.org/dc/elements/1.1/" xml:lang="en" xmlns:xml="http://www.w3.org/XML/1998/namespace">Biophysical Journal</title>
        </rdf:Description>
        <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:nodeID="n11">
            <W3CDTF xmlns="http://purl.org/dc/terms/" xml:lang="en" xmlns:xml="http://www.w3.org/XML/1998/namespace">2009-03-18 00:00</W3CDTF>
        </rdf:Description>
        <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:nodeID="n12">
            <N xmlns="http://www.w3.org/2001/vcard-rdf/3.0#">
                <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:nodeID="n15"/>
            </N>
            <ORG xmlns="http://www.w3.org/2001/vcard-rdf/3.0#">
                <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:nodeID="n16"/>
            </ORG>
            <EMAIL xmlns="http://www.w3.org/2001/vcard-rdf/3.0#">
                <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:nodeID="n17"/>
            </EMAIL>
        </rdf:Description>
        <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:nodeID="n13">
            <N xmlns="http://www.w3.org/2001/vcard-rdf/3.0#">
                <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:nodeID="n18"/>
            </N>
            <ORG xmlns="http://www.w3.org/2001/vcard-rdf/3.0#">
                <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:nodeID="n19"/>
            </ORG>
            <EMAIL xmlns="http://www.w3.org/2001/vcard-rdf/3.0#">
                <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:nodeID="n20"/>
            </EMAIL>
        </rdf:Description>
        <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:nodeID="n14">
            <N xmlns="http://www.w3.org/2001/vcard-rdf/3.0#">
                <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:nodeID="n21"/>
            </N>
            <ORG xmlns="http://www.w3.org/2001/vcard-rdf/3.0#">
                <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:nodeID="n22"/>
            </ORG>
            <EMAIL xmlns="http://www.w3.org/2001/vcard-rdf/3.0#">
                <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:nodeID="n23"/>
            </EMAIL>
        </rdf:Description>
        <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:nodeID="n15">
            <Family xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en" xmlns:xml="http://www.w3.org/XML/1998/namespace">Cooling</Family>
            <Given xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en" xmlns:xml="http://www.w3.org/XML/1998/namespace">Mike</Given>
        </rdf:Description>
        <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:nodeID="n16">
            <Orgname xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en" xmlns:xml="http://www.w3.org/XML/1998/namespace">Auckland Bioengineering Institute</Orgname>
            <Orgunit xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en" xmlns:xml="http://www.w3.org/XML/1998/namespace">University of Auckland</Orgunit>
        </rdf:Description>
        <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:nodeID="n17">
            <rdf:type xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
                <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:about="http://imc.org/vCard/3.0#internet"/>
            </rdf:type>
            <rdf:value xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" xml:lang="en" xmlns:xml="http://www.w3.org/XML/1998/namespace">m.cooling@auckland.ac.nz</rdf:value>
        </rdf:Description>
        <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:nodeID="n18">
            <Family xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en" xmlns:xml="http://www.w3.org/XML/1998/namespace">Hunter</Family>
            <Given xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en" xmlns:xml="http://www.w3.org/XML/1998/namespace">Peter</Given>
        </rdf:Description>
        <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:nodeID="n19">
            <Orgname xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en" xmlns:xml="http://www.w3.org/XML/1998/namespace">Auckland Bioengineering Institute</Orgname>
            <Orgunit xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en" xmlns:xml="http://www.w3.org/XML/1998/namespace">University of Auckland</Orgunit>
        </rdf:Description>
        <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:nodeID="n20">
            <rdf:type xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
                <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:about="http://imc.org/vCard/3.0#internet"/>
            </rdf:type>
            <rdf:value xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" xml:lang="en" xmlns:xml="http://www.w3.org/XML/1998/namespace">p.hunter@auckland.ac.nz</rdf:value>
        </rdf:Description>
        <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:nodeID="n21">
            <Family xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en" xmlns:xml="http://www.w3.org/XML/1998/namespace">Crampin</Family>
            <Given xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en" xmlns:xml="http://www.w3.org/XML/1998/namespace">Edmund</Given>
        </rdf:Description>
        <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:nodeID="n22">
            <Orgname xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en" xmlns:xml="http://www.w3.org/XML/1998/namespace">Auckland Bioengineering Institute</Orgname>
            <Orgunit xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en" xmlns:xml="http://www.w3.org/XML/1998/namespace">University of Auckland</Orgunit>
        </rdf:Description>
        <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:nodeID="n23">
            <rdf:type xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
                <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:about="http://imc.org/vCard/3.0#internet"/>
            </rdf:type>
            <rdf:value xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" xml:lang="en" xmlns:xml="http://www.w3.org/XML/1998/namespace">e.crampin@auckland.ac.nz</rdf:value>
        </rdf:Description>
        <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:nodeID="n8">
            <rdf:value xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
                <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:nodeID="n24"/>
            </rdf:value>
            <subject_type xmlns="http://www.cellml.org/bqs/1.0#" xml:lang="en" xmlns:xml="http://www.w3.org/XML/1998/namespace">keyword</subject_type>
        </rdf:Description>
        <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:nodeID="n24">
            <rdf:type xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
                <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:about="http://www.w3.org/1999/02/22-rdf-syntax-ns#Bag"/>
            </rdf:type>
            <rdf:_1 xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" xml:lang="en" xmlns:xml="http://www.w3.org/XML/1998/namespace">Signal Transduction</rdf:_1>
            <rdf:_2 xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" xml:lang="en" xmlns:xml="http://www.w3.org/XML/1998/namespace">Calcium Dynamics</rdf:_2>
            <rdf:_3 xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" xml:lang="en" xmlns:xml="http://www.w3.org/XML/1998/namespace">Gene Regulation</rdf:_3>
            <rdf:_4 xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" xml:lang="en" xmlns:xml="http://www.w3.org/XML/1998/namespace">Excitation-Transcription Coupling</rdf:_4>
            <rdf:_5 xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" xml:lang="en" xmlns:xml="http://www.w3.org/XML/1998/namespace">NFAT</rdf:_5>
        </rdf:Description>
    </rdf:RDF>
</model>
